PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1440, 900]
  expName = gating
  keyboardBackend = ioHub
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Routines
  Routine Instrucciones
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Escriba la palabra que crea que se está pronunciando
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  Routine otros_primera
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  Routine primera_condicion_otros
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    SoundComponent sound_3
      sound [set every repeat] = $otros
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine segunda_condicion_otros
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    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    SoundComponent sound_4
      sound [set every repeat] = $otro
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_4
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine primera_condicion_frutas
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    SoundComponent sound_1
      sound [set every repeat] = $frutas
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine segunda_condicion_animales
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    SoundComponent sound_2
      sound [set every repeat] = $animales
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Agradecimientos
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡Gracias por participar! :)
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Flow
  Routine Instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = frutas.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'frutas': 'primera_condicion/frutas/02_Naranj_200.mp3'},
      {'frutas': 'primera_condicion/frutas/02_Naranj_250.mp3'},
      {'frutas': 'primera_condicion/frutas/02_Naranj_300.mp3'},
      {'frutas': 'primera_condicion/frutas/02_Naranj_350.mp3'},
      {'frutas': 'primera_condicion/frutas/02_Naranj_420.mp3'},
      {'frutas': 'primera_condicion/frutas/03_Limon_200.mp3'},
      {'frutas': 'primera_condicion/frutas/03_Limon_250.mp3'},
      {'frutas': 'primera_condicion/frutas/03_Limon_290.mp3'},
      {'frutas': 'primera_condicion/frutas/04_Pera_140.mp3'},
      {'frutas': 'primera_condicion/frutas/04_Pera_180.mp3'}]
    Routine primera_condicion_frutas
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = primera_condicion.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'otros': 'primera_condicion/otros/01_Cang_200.mp3'},
      {'otros': 'primera_condicion/otros/01_Cang_250.mp3'},
      {'otros': 'primera_condicion/otros/01_Cang_320.mp3'},
      {'otros': 'primera_condicion/otros/05_Pato_140.mp3'},
      {'otros': 'primera_condicion/otros/05_Pato_180.mp3'},
      {'otros': 'primera_condicion/otros/06_Baston_200.mp3'},
      {'otros': 'primera_condicion/otros/06_Baston_250.mp3'},
      {'otros': 'primera_condicion/otros/06_Baston_300.mp3'},
      {'otros': 'primera_condicion/otros/06_Baston_350.mp3'},
      {'otros': 'primera_condicion/otros/06_Baston_400.mp3'},
      {'otros': 'primera_condicion/otros/07_Columpio_200.mp3'},
      {'otros': 'primera_condicion/otros/07_Columpio_250.mp3'},
      {'otros': 'primera_condicion/otros/07_Columpio_300.mp3'},
      {'otros': 'primera_condicion/otros/07_Columpio_350.mp3'},
      {'otros': 'primera_condicion/otros/07_Columpio_400.mp3'},
      {'otros': 'primera_condicion/otros/07_Columpio_450.mp3'},
      {'otros': 'primera_condicion/otros/07_Columpio_500.mp3'},
      {'otros': 'primera_condicion/otros/08_Mapache_200.mp3'},
      {'otros': 'primera_condicion/otros/08_Mapache_250.mp3'},
      {'otros': 'primera_condicion/otros/08_Mapache_300.mp3'},
      {'otros': 'primera_condicion/otros/08_Mapache_350.mp3'},
      {'otros': 'primera_condicion/otros/08_Mapache_400.mp3'},
      {'otros': 'primera_condicion/otros/08_Mapache_440.mp3'},
      {'otros': 'primera_condicion/otros/09_Balanza_200.mp3'},
      {'otros': 'primera_condicion/otros/09_Balanza_250.mp3'},
      {'otros': 'primera_condicion/otros/09_Balanza_300.mp3'},
      {'otros': 'primera_condicion/otros/09_Balanza_350.mp3'}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
    Routine primera_condicion_otros
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = animales.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'animales': 'segunda_condicion/animales/01_Cang_200.mp3'},
      {'animales': 'segunda_condicion/animales/01_Cang_250.mp3'},
      {'animales': 'segunda_condicion/animales/01_Cang_320.mp3'},
      {'animales': 'segunda_condicion/animales/05_Pato_140.mp3'},
      {'animales': 'segunda_condicion/animales/05_Pato_180.mp3'},
      {'animales': 'segunda_condicion/animales/08_Mapache_200.mp3'},
      {'animales': 'segunda_condicion/animales/08_Mapache_250.mp3'},
      {'animales': 'segunda_condicion/animales/08_Mapache_300.mp3'},
      {'animales': 'segunda_condicion/animales/08_Mapache_350.mp3'},
      {'animales': 'segunda_condicion/animales/08_Mapache_400.mp3'},
      {'animales': 'segunda_condicion/animales/08_Mapache_440.mp3'},
      {'animales': 'segunda_condicion/animales/12_Zorro_160.mp3'},
      {'animales': 'segunda_condicion/animales/12_Zorro_190.mp3'},
      {'animales': 'segunda_condicion/animales/12_Zorro_220.mp3'}]
    Routine segunda_condicion_animales
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = segunda_condicion.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'otro': 'segunda_condicion/otros/02_Naranj_200.mp3'},
      {'otro': 'segunda_condicion/otros/02_Naranj_250.mp3'},
      {'otro': 'segunda_condicion/otros/02_Naranj_300.mp3'},
      {'otro': 'segunda_condicion/otros/02_Naranj_350.mp3'},
      {'otro': 'segunda_condicion/otros/02_Naranj_420.mp3'},
      {'otro': 'segunda_condicion/otros/03_Limon_200.mp3'},
      {'otro': 'segunda_condicion/otros/03_Limon_250.mp3'},
      {'otro': 'segunda_condicion/otros/03_Limon_290.mp3'},
      {'otro': 'segunda_condicion/otros/04_Pera_140.mp3'},
      {'otro': 'segunda_condicion/otros/04_Pera_180.mp3'},
      {'otro': 'segunda_condicion/otros/06_Baston_200.mp3'},
      {'otro': 'segunda_condicion/otros/06_Baston_250.mp3'},
      {'otro': 'segunda_condicion/otros/06_Baston_300.mp3'},
      {'otro': 'segunda_condicion/otros/06_Baston_350.mp3'},
      {'otro': 'segunda_condicion/otros/06_Baston_400.mp3'},
      {'otro': 'segunda_condicion/otros/07_Columpio_200.mp3'},
      {'otro': 'segunda_condicion/otros/07_Columpio_250.mp3'},
      {'otro': 'segunda_condicion/otros/07_Columpio_300.mp3'},
      {'otro': 'segunda_condicion/otros/07_Columpio_350.mp3'},
      {'otro': 'segunda_condicion/otros/07_Columpio_400.mp3'},
      {'otro': 'segunda_condicion/otros/07_Columpio_450.mp3'},
      {'otro': 'segunda_condicion/otros/07_Columpio_500.mp3'},
      {'otro': 'segunda_condicion/otros/09_Balanza_200.mp3'},
      {'otro': 'segunda_condicion/otros/09_Balanza_250.mp3'},
      {'otro': 'segunda_condicion/otros/09_Balanza_300.mp3'},
      {'otro': 'segunda_condicion/otros/09_Balanza_350.mp3'},
      {'otro': 'segunda_condicion/otros/09_Balanza_400.mp3'},
      {'otro': 'segunda_condicion/otros/09_Balanza_460.mp3'}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
    Routine segunda_condicion_otros
  LoopTerminator trials_4
  Routine Agradecimientos
